PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = Simcolourproject_2stim_asymm_v1
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Routines
  Routine welcome_instr
    TextComponent welcome
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to this experiment

        This will take about 45 minutes
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue 
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  Routine consent
  Routine instr_1
    TextComponent text_1
      color = yellow
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Before starting the main experiment, we need to do some quick calibrations to ensure your screen is set up correctly.
      wrapWidth = 1.5
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    TextComponent space_2
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue 
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    TextComponent text_2
      color = red
      letterHeight = 0.04
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      text = Warning! It is critical that these calibrations are done correctly or you will be unable to do the experiment and we will be unable to approve your payment!
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_3
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = /Users/bethfisher/Documents/Simcolourproject_online/calibrationinstructions_py.mov
      pos = (0, 100)
      size [set every repeat] = (380,410)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Next, we need to get you to keep your head a fixed distance from the screen.
        This will ensure future images are the right size for your screen. On the next screen please:
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        1. Keeping your arm straight, please touch your thumb to the centre of the screen in the oval
        2. While keeping your head in the same position, lower your arm.
        3. Please keep your head in this position for the remainder of the experiment
    TextComponent space_3
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue 
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  Routine instr_4
    TextComponent text_4
      color = yellow
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        1. While keeping your arm straight touch your thumb to the centre of the screen in the oval.
        2. Keep yourhead in the same position, but lower and relax your arm.
        3. Please keep your head in this position for the remainder of the experiment
        4. Press SPACE to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent calibrationline
      image = /Users/bethfisher/Documents/Simcolourproject_online/calibrationline.png
      pos = (0, -0.2)
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
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  Routine instr_5
    TextComponent text_5
      color = yellow
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Lastly, we need to know how far your head is from the screen.
        Please keep your head in the same position as before.

        Over the next few pages we will explain how we can work out how far you are sitting from the screen.
        Please pay attention and follow all the instructions carefully.

        These first few pages will be INSTRUCTIONS ONLY. You will be instructed when the calibrations start.

        When ready, press SPACE to continue and follow the instructions on the next page.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_4
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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  Routine instr_6
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_5
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent instr_only
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
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    TextComponent text_6
      color = yellow
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 1. Put a finger on <ENTER> on the keyboard.
      wrapWidth = 1.5
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  Routine instr_7
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_6
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent instr_only_2
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
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    TextComponent text_7
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        3. Stare at the middle of the screen, keeping your head in the same position as before.
        Keep your right eye closed.
    PolygonComponent center_cross
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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  Routine instr_8
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_7
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent instr_only_3
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
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    TextComponent text_8
      color = yellow
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 2. Close your right eye
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  Routine colour_circle_instr
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        from psychopy import tools
        import random as rnd
        rnd.seed()
      Begin Routine:
        # Randomly place instruction circles
        circle_position = [(-0.25,0.25),(0,0.25),(0.25,0.25),(-0.25,0),(0,0),(0.25,0),(0.25,-0.25),(0,-0.25),(-0.25,-0.25)]
        rnd.shuffle(circle_position)
        print(circle_position)
      Each Frame:
        #for jj in range(len(instruction_3_color)):
        #    circle[jj].draw()
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    PolygonComponent intructioncircle_1
      fillColor = $[255, 0, 0]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[1]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent instructioncircle_2
      fillColor = $[255, 170, 0]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[2]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent instructioncircle_3
      fillColor = $[170, 255, 0]
      fillColorSpace = rgb255
      lineColor = $[170, 255, 0]
      nVertices = 1000
      pos [set every frame] = $circle_position[3]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent instructioncircle_4
      fillColor = $[0, 255, 0]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[4]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent instructioncircle_5
      fillColor = $[0, 255, 169]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[5]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent insturctioncircle_6
      fillColor = $[0, 169, 255]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[6]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent instructioncircle_7
      fillColor = $[0, 0, 255]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[7]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent instructioncircle_8
      fillColor = $[170, 0, 255]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[8]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent instructioncircle_9
      fillColor = $[255, 0, 170]
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $circle_position[0]
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent space_9
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent text_9
      color = yellow
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = During the test, you will see these 9 colors below
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  Routine instr_10
    TextComponent space_10
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent text_10
      color = yellow
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You are going to do a few practice trials to make you be more familiar with the experiment.
        When you are ready, please press SPACE to start the practice trials
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_9
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_8
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent instr_only_4
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
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    TextComponent text_11
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        5. During the calibration task, a flickering red ball will disappear as it moves from right to left.
        Ignore the flickering.
        Keep your right eye closed, stare at the black square and do not move your head.
    PolygonComponent center_cross_2
      fillColor = $[1,1,1]
      lineWidth = 0.8
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent black_square1
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos = (0.5,0)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = black
      letterHeight = 0.03
      pos = (0.48, 0.05)
      startVal [time (s)] = 0.0
      text = <--- Ball movement 
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    PolygonComponent red_ball
      fillColor = red
      lineColor = red
      nVertices = 1000
      pos = (0.4, 0)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine instr_11
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_11
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent instr_only_5
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
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    TextComponent text_13
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        4. Without moving your head or face, use your left eye to focus on the black square.
        Keep your right eye closed and do not move your head.
    PolygonComponent center_cross_3
      fillColor = $[1,1,1]
      lineWidth = 0.8
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent black_square
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos = (0.5,0)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = black
      letterHeight = 0.03
      pos = (0.5, 0.05)
      startVal [time (s)] = 0.0
      text = Stare at the square
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  Routine instr_12
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_12
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent instr_only_6
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
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    TextComponent text_15
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        7. The next page will show you a demonstration of the calibration task for a few seconds.
        During the actual calibration, you will need to press <ENTER> when the ball disappears.

        You will do this five times so we can make sure we get the right distance.
        The ball will reset each time.

        Keep your right eye closed, stare at the black square and do not move your head.
  Routine stim1_instr
    MovieComponent stim1
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = /Users/bethfisher/Documents/Simcolourproject_online/1stimmov.mp4
      pos = (0, 100)
      size = [580,400]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      syncScreenRefresh = False
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    TextComponent space_13
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent text_16
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Throughout the experiment, focus on the cross at the centre of the screen.
        A circle will flas out quickly on the screen.
  Routine stim_response_instr
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = /Users/bethfisher/Documents/Simcolourproject_online/1stim_async_response_py.mov
      pos = (0, 100)
      size = [580,400]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_14
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    TextComponent text_17
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Sometimes you will need to decide the similarity levels of the previous circle to a circle on the next screen.
        Ignore any size differences.

        0 => most similar colour (least different colour)
        7 => most different colour (least similar colour)

        After choosing, move your cursor back to the centre and click the box to continue.
  Routine catch_insrt
    TextComponent space_15
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
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    KeyboardComponent key_resp_17
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    MovieComponent movie_3
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = /Users/bethfisher/Documents/Simcolourproject_online/catch_py.mov
      pos = (0, 100)
      size = [580,400]
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_18
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Sometimes there will be a special trial where you will just be asked to click on a particular value.
        Please click on the value for that trial.
  Routine calibration_example
    PolygonComponent red_ball1
      fillColor = red
      lineColor = red
      nVertices = 1000
      pos [set every frame] = [(-frameN+200), 0]
      shape = regular polygon...
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 250
      units = pix
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent black_square3
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos = (0.5,0)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = green
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 250
      text = VISIBLE
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    TextComponent text_20
      color = red
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [frame N] = 250
      stopVal [frame N] = 320
      text = INVISIBLE
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    PolygonComponent red_ball12
      fillColor = red
      lineColor = red
      nVertices = 1000
      pos [set every frame] = [(-frameN-50), 0]
      shape = regular polygon...
      size = (50, 50)
      startVal [frame N] = 320
      stopVal [frame N] = 500
      units = pix
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    TextComponent text_21
      color = green
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [frame N] = 320
      text = VISIBLE
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    TextComponent text_22
      color = green
      letterHeight = 0.03
      pos = (0, -.2)
      startVal [frame N] = 250
      stopVal [frame N] = 320
      text = Press <ENTER> now!
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    PolygonComponent red_ball13
      fillColor = red
      lineColor = red
      nVertices = 1000
      pos [set every frame] = [(-frameN+700), 0]
      shape = regular polygon...
      size = (50, 50)
      startVal [frame N] = 500
      stopVal [frame N] = 700
      units = pix
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 700:
            continueRoutine = False
  Routine response
    ImageComponent response1disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk
      image = /Users/bethfisher/Documents/Simcolourproject_online/response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = response1disk,response2disk,response3disk,response4disk,response5disk,response6disk,response7disk,response8disk,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent Circle_2
      fillColor [set every frame] = $Circle2_col
      fillColorSpace = rgb255
      nVertices = 1000
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Count trial numbers

        trialnumber =  trialnumber + 1;

        # Set circle colour
        if Colour_2 == 1:
            Circle2_col = (255, 0, 0);
        elif Colour_2 == 2:
            Circle2_col = (255, 170, 0);
        elif Colour_2 == 3:
            Circle2_col = (170, 255, 0);
        elif Colour_2 == 4:
            Circle2_col = (0, 255, 0);
        elif Colour_2 == 5:
            Circle2_col = (0, 255, 169);
        elif Colour_2 == 6:
            Circle2_col = (255, 0, 0);
        elif Colour_2 == 7:
            Circle2_col = (0, 0, 255);
        elif Colour_2 == 8:
            Circle2_col = (170, 0, 255);
        elif Colour_2 == 9:
            Circle2_col = (255, 0, 170);
    TextComponent text_23
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Please choose the similarity level of the previously 2 cued circles
        0 => Most similar
        7 => Most different
  Routine Stim1_display
    PolygonComponent Circle_1
      fillColor [set every frame] = $Circle1_col
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $(circle1posx,circle1posy)
      shape = regular polygon...
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent centre_cross4
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Circle position and size

        x = 100
        y = 100

        radius_F = 1
        radius_P = 1

        angle_1 = 0
        angle_2 = 0


        theta_1 = (angle_1)*(pi/180)
        theta_2 = (angle_2)*(pi/180)


        deltax_1 = radius_F*cos(theta_1)
        deltay_1 = radius_F*sin(theta_1)
        deltax_2 = radius_P*cos(theta_2)
        deltay_2 = radius_P*sin(theta_2)


        a_1 = x + deltax_1
        b_1 = y + deltay_1
        a_2 = x + deltax_2
        b_2 = y + deltay_2


        # Set circle position
        if Ecc == 'FF':
            circle1posx = a_1;
            circle1posy = b_1;
        elif Ecc == 'PF':
                circle1posx = a_2;
                circle1posy = b_2;

        # Set circle colour
        if Colour_1 == 1:
            Circle1_col = (255, 0, 0);
        elif Colour_1 == 2:
            Circle1_col = (255, 170, 0);
        elif Colour_1 == 3:
            Circle1_col = (170, 255, 0);
        elif Colour_1 == 4:
            Circle1_col = (0, 255, 0);
        elif Colour_1 == 5:
            Circle1_col = (0, 255, 169);
        elif Colour_1 == 6:
            Circle1_col = (255, 0, 0);
        elif Colour_1 == 7:
            Circle1_col = (0, 0, 255);
        elif Colour_1 == 8:
            Circle1_col = (170, 0, 255);
        elif Colour_1 == 9:
            Circle1_col = (255, 0, 170);
  Routine response_2
    ImageComponent response1disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk_2
      image = /Users/bethfisher/Documents/Simcolourproject_online/response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle
      fillColor = green
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 324 questions';
    TextComponent text_25
      color = black
      letterHeight = 0.03
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = Please click on the green rectangle to continue
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    TextComponent text_24
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
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  Routine catch_1
    ImageComponent response1disk_3
      image = response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk_3
      image = response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_3
      image = response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk_3
      image = response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_3
      image = response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk_3
      image = response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_3
      image = response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk_3
      image = response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = response1disk,response2disk,response3disk,response4disk,response5disk,response6disk,response7disk,response8disk,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        # Set up catch trials

        catchtrialorder = []
        for i in range(0,10):
            n = rnd.randint(1,162)
            catchtrialorder.append(n)
        print(catchtrialorder)
      Begin Routine:
        # Select random number for catch trial

        catchnumber = rnd.randint(0,7);

        catchtext = f'SPECIAL TRIAL PLEASE JUST SELECT {catchnumber}'
      Each Frame:
        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9])):
            continueRoutine=False
    TextComponent text_26
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
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    PolygonComponent rectangle_2
      fillColor = green
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
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  Routine startup
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        from psychopy import tools
        import random as rnd
        rnd.seed()

        # Set path names for images
        arrow1 = 'images/arrow1.png'
        arrow2 = 'images/arrow2.png'
        half_circle = 'images/circle_7.png'
        half_circle_con = 'images/confidence_12.png'
        trackpad1 = 'images/trackpad_button.png'
        mouse_button1 = 'images/mouse_button.png'
  Routine summary_1
    ImageComponent response1disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk_4
      image = /Users/bethfisher/Documents/Simcolourproject_online/response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_3
      fillColor = green
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 324 questions';
    TextComponent text_27
      color = black
      letterHeight = 0.03
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = Please click on the green rectangle to continue
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    TextComponent text_28
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
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  Routine Stim1_display_prac
    PolygonComponent Circle
      fillColor [set every frame] = $Circle1_col
      fillColorSpace = rgb255
      nVertices = 1000
      pos [set every frame] = $(circle1posx,circle1posy)
      shape = regular polygon...
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = pix
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    PolygonComponent centre_cross4_2
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.500
      units = norm
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        # Circle position and size

        x = 100
        y = 100

        radius_F = 1
        radius_P = 1

        angle_1 = 0
        angle_2 = 0


        theta_1 = (angle_1)*(pi/180)
        theta_2 = (angle_2)*(pi/180)


        deltax_1 = radius_F*cos(theta_1)
        deltay_1 = radius_F*sin(theta_1)
        deltax_2 = radius_P*cos(theta_2)
        deltay_2 = radius_P*sin(theta_2)


        a_1 = x + deltax_1
        b_1 = y + deltay_1
        a_2 = x + deltax_2
        b_2 = y + deltay_2


        # Set circle position
        if Ecc == 'FF':
            circle1posx = a_1;
            circle1posy = b_1;
        elif Ecc == 'PF':
                circle1posx = a_2;
                circle1posy = b_2;

        # Randomly select circle colour

        Colour_1 = rnd.randint(1,9);

        # Set circle colour
        if Colour_1 == 1:
            Circle1_col = (255, 0, 0);
        elif Colour_1 == 2:
            Circle1_col = (255, 170, 0);
        elif Colour_1 == 3:
            Circle1_col = (170, 255, 0);
        elif Colour_1 == 4:
            Circle1_col = (0, 255, 0);
        elif Colour_1 == 5:
            Circle1_col = (0, 255, 169);
        elif Colour_1 == 6:
            Circle1_col = (255, 0, 0);
        elif Colour_1 == 7:
            Circle1_col = (0, 0, 255);
        elif Colour_1 == 8:
            Circle1_col = (170, 0, 255);
        elif Colour_1 == 9:
            Circle1_col = (255, 0, 170);
  Routine response_prac
    ImageComponent response1disk_5
      image = response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk_5
      image = response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_5
      image = response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk_5
      image = response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_5
      image = response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk_5
      image = response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_5
      image = response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk_5
      image = response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = response1disk,response2disk,response3disk,response4disk,response5disk,response6disk,response7disk,response8disk,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent Circle_3
      fillColor [set every frame] = $Circle2_col
      fillColorSpace = rgb255
      nVertices = 1000
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        # Count trial numbers

        pracnumber =  pracnumber + 1;

        # Randomly select circle colour

        Colour_2 = rnd.randint(1,9);

        # Set circle colour
        if Colour_2 == 1:
            Circle2_col = (255, 0, 0);
        elif Colour_2 == 2:
            Circle2_col = (255, 170, 0);
        elif Colour_2 == 3:
            Circle2_col = (170, 255, 0);
        elif Colour_2 == 4:
            Circle2_col = (0, 255, 0);
        elif Colour_2 == 5:
            Circle2_col = (0, 255, 169);
        elif Colour_2 == 6:
            Circle2_col = (255, 0, 0);
        elif Colour_2 == 7:
            Circle2_col = (0, 0, 255);
        elif Colour_2 == 8:
            Circle2_col = (170, 0, 255);
        elif Colour_2 == 9:
            Circle2_col = (255, 0, 170);
    TextComponent text_29
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Please choose the similarity level of the previously 2 cued circles
        0 => Most similar
        7 => Most different
  Routine catch_prac
    ImageComponent response1disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk_7
      image = /Users/bethfisher/Documents/Simcolourproject_online/response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      clickable = response1disk,response2disk,response3disk,response4disk,response5disk,response6disk,response7disk,response8disk,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        # Set up catch trials

        catchtrialorderprac = []
        for i in range(0,2):
            n = rnd.randint(1,7)
            catchtrialorderprac.append(n)
        print(catchtrialorderprac)
      Begin Routine:
        # Select random number for catch trial

        catchnumberprac = rnd.randint(0,7);

        catchtext = f'SPECIAL TRIAL PLEASE JUST SELECT {catchnumberprac}'
      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
    TextComponent text_32
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
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    PolygonComponent rectangle_5
      fillColor = green
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
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  Routine special_trial
    TextComponent text_33
      color = RED
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .250
      text = SPECIAL TRIAL
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    CodeComponent code_13
      Code Type = Auto->JS
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      Each Frame:
        # Run catch trials
        if not ((trialnumber == catchtrialorder[0]) or (trialnumber == catchtrialorder[1]) or (trialnumber == catchtrialorder[2]) or (trialnumber == catchtrialorder[3]) or (trialnumber == catchtrialorder[4]) or (trialnumber == catchtrialorder[5]) or (trialnumber == catchtrialorder[6]) or (trialnumber == catchtrialorder[7]) or (trialnumber == catchtrialorder[8]) or (trialnumber == catchtrialorder[9])):
            continueRoutine=False
  Routine summary1_prac
    ImageComponent response1disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk_8
      image = /Users/bethfisher/Documents/Simcolourproject_online/response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_8
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_6
      fillColor = green
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';
    TextComponent text_34
      color = black
      letterHeight = 0.03
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = Please click on the green rectangle to continue
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    TextComponent text_35
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
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  Routine summary2_prac
    ImageComponent response1disk_6
      image = response1disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response2disk_6
      image = response2disks.png
      pos = (0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_6
      image = response3disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response4disk_6
      image = response4disks.png
      pos = (0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_6
      image = response5disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response6disk_6
      image = response6disks.png
      pos = (-0.09,-0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_6
      image = response7disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent response8disk_6
      image = response8disks.png
      pos = (-0.09,0.09)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_6
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_4
      fillColor = green
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        pracnumber = 0;
      Begin Routine:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False

        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';
    TextComponent text_30
      color = black
      letterHeight = 0.03
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = Please click on the green rectangle to continue
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    TextComponent text_31
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
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  Routine special_trial_prac
    TextComponent text_36
      color = RED
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .250
      text = SPECIAL TRIAL
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    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
  Routine screen_scale
    CodeComponent code_JS
      Code Type = Auto->JS
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            ccimage.size=[x_size*x_scale, x_size*x_scale*0.62]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    ImageComponent ccimage
      image = card.png
      size [set every repeat] = $(x_size*x_scale, x_size*x_scale*0.62)
      startVal [time (s)] = 0.0
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Flow
  Routine startup
  Routine screen_scale
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = practrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')]),
      OrderedDict([('Ecc', 'FF')]),
      OrderedDict([('Ecc', 'PF')])]
    Routine Stim1_display_prac
    Routine response_prac
    Routine summary1_prac
    Routine special_trial_prac
    Routine catch_prac
    Routine summary2_prac
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = Stimconditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Colour_1', 6), ('Colour_2', 6), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 1), ('Colour_2', 3), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 1), ('Colour_2', 2), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 3), ('Colour_2', 8), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 3), ('Colour_2', 3), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 6), ('Colour_2', 1), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 9), ('Colour_2', 8), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 5), ('Colour_2', 7), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 5), ('Colour_2', 4), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 2), ('Colour_2', 1), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 7), ('Colour_2', 9), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 9), ('Colour_2', 2), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 5), ('Colour_2', 6), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 4), ('Colour_2', 2), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 2), ('Colour_2', 2), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 1), ('Colour_2', 9), ('Ecc', 'PF')]),
      OrderedDict([('Colour_1', 5), ('Colour_2', 8), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 9), ('Colour_2', 9), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 6), ('Colour_2', 7), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 5), ('Colour_2', 5), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 8), ('Colour_2', 1), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 6), ('Colour_2', 3), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 8), ('Colour_2', 2), ('Ecc', 'FF')]),
      OrderedDict([('Colour_1', 8), ('Colour_2', 7), ('Ecc', 'PF')])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
    Routine Stim1_display
    Routine response
    Routine special_trial
    Routine catch_1
    Routine response_2
  LoopTerminator trials
  Routine welcome_instr
  Routine instr_1
  Routine instr_3
  Routine instr_4
  Routine instr_5
  Routine instr_6
  Routine instr_8
  Routine instr_7
  Routine colour_circle_instr
  Routine instr_10
